PsychoPy2experiment version="2021.2.3"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 960]
  expName = stroop_pup
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Routines
  Routine instructions
    TextComponent text_instruction
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Hello, smart guy!
        Choose the color of the word and press corresponding key
        Ignore the word

        r = red
        b = blue
        g = green
        y = yellow
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.color = 'green'
      End Routine:
        win.color = 'grey'
    MouseComponent response_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine stimuli
    PolygonComponent figure_rectangle
      fillColor = white
      pos = (0.72, 0.47)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_word
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent response_keybord
      allowedKeys [set every repeat] = 'r','g','y','b'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine test
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        Rect
  Routine long_fixation_cross
    TextComponent text_long_cross
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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  Routine short_fixation_cross
    TextComponent text_short_cross
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Thanks
    TextComponent text_thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks!
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Flow
  Routine instructions
  Routine long_fixation_cross
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Книга.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'red', 'color': 'red', 'congruent': 1, 'corrAns': 'r'},
      {'word': 'red', 'color': 'green', 'congruent': 0, 'corrAns': 'g'},
      {'word': 'red', 'color': 'blue', 'congruent': 0, 'corrAns': 'b'},
      {'word': 'red', 'color': 'yellow', 'congruent': 0, 'corrAns': 'y'},
      {'word': 'green', 'color': 'green', 'congruent': 1, 'corrAns': 'g'},
      {'word': 'green', 'color': 'red', 'congruent': 0, 'corrAns': 'r'},
      {'word': 'green', 'color': 'blue', 'congruent': 0, 'corrAns': 'b'},
      {'word': 'green', 'color': 'yellow', 'congruent': 0, 'corrAns': 'y'},
      {'word': 'blue', 'color': 'blue', 'congruent': 1, 'corrAns': 'b'},
      {'word': 'blue', 'color': 'red', 'congruent': 0, 'corrAns': 'r'},
      {'word': 'blue', 'color': 'green', 'congruent': 0, 'corrAns': 'g'},
      {'word': 'blue', 'color': 'yellow', 'congruent': 0, 'corrAns': 'y'},
      {'word': 'yellow', 'color': 'yellow', 'congruent': 1, 'corrAns': 'y'},
      {'word': 'yellow', 'color': 'red', 'congruent': 0, 'corrAns': 'r'},
      {'word': 'yellow', 'color': 'green', 'congruent': 0, 'corrAns': 'g'},
      {'word': 'yellow', 'color': 'blue', 'congruent': 0, 'corrAns': 'b'}]
    Routine stimuli
    Routine short_fixation_cross
  LoopTerminator trials
  Routine Thanks
